# Unload all devices
Property,Core,Initialize,0

# Load microscope devices
Device,COM15,SerialManager,COM15
Device,COM16,SerialManager,COM16
Device,OrcaFusionBT,HamamatsuHam,HamamatsuHam_DCAM
Device,MCL NanoDrive Z Stage,MCL_NanoDrive,MCL NanoDrive Z Stage
Device,Coherent-Scientific Remote,CoherentScientificRemote,Coherent-Scientific Remote
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,PLogic:E:36,ASITiger,PLogic:E:36
Device,ZStage:M:37,ASITiger,ZStage:M:37
# Load instrument gui devices
Device,Camera,DemoCamera,DCam
Device,DHub,DemoCamera,DHub
Device,LED,DemoCamera,DStateDevice
Device,LED Shutter,Utilities,State Device Shutter
Device,ImageGalvoRange,DemoCamera,D-DA
Device,ImageGalvoMirrorRange,Utilities,DA Z Stage
Device,OPM-mode,DemoCamera,DStateDevice
Device,AO-mode,DemoCamera,DStateDevice
Device,Fluidics-mode,DemoCamera,DStateDevice
Device,O2O3focus-mode,DemoCamera,DStateDevice
Device,ImageGalvoMirrorStep,DemoCamera,DStateDevice

# Pre-initialization properties
# Configure the possible instrument modes
Property,OPM-mode,Number of positions,3
Property,AO-mode,Number of positions,4
Property,Fluidics-mode,Number of positions,5
Property,O2O3focus-mode,Number of positions,4
# Configure the ImageGalvoMirrorRange properties
Property,ImageGalvoMirrorStep,Number of positions,3
Property,ImageGalvoMirrorRange,Stage High Position(um),250.0000
Property,ImageGalvoMirrorRange,Stage High Voltage,5.0000
Property,ImageGalvoMirrorRange,Stage Low Position(um),0.0000
Property,ImageGalvoMirrorRange,Stage Low Voltage,0.0000
# Configure serial port properties
Property,COM15,AnswerTimeout,500.0000
Property,COM15,BaudRate,115200
Property,COM15,DTR,Disable
Property,COM15,DataBits,8
Property,COM15,DelayBetweenCharsMs,0.0000
Property,COM15,Fast USB to Serial,Disable
Property,COM15,Handshaking,Off
Property,COM15,Parity,None
Property,COM15,StopBits,1
Property,COM15,Verbose,1
Property,COM16,AnswerTimeout,500.0000
Property,COM16,BaudRate,115200
Property,COM16,DTR,Disable
Property,COM16,DataBits,8
Property,COM16,DelayBetweenCharsMs,0.0000
Property,COM16,Fast USB to Serial,Disable
Property,COM16,Handshaking,Off
Property,COM16,Parity,None
Property,COM16,StopBits,1
Property,COM16,Verbose,1
# Assign device ports
Property,Coherent-Scientific Remote,Port,COM15
Property,TigerCommHub,Port,COM16
Property,PLogic:E:36,PLogicMode,None


# Hub references
# Assign gui control devices to a virtual hub
Parent,LED,DHub
Parent,OPM-mode,DHub
Parent,AO-mode,DHub
Parent,Fluidics-mode,DHub
Parent,O2O3focus-mode,DHub
Parent,ImageGalvoMirrorStep,DHub
# Assign ASI controllers
Parent,XYStage:XY:31,TigerCommHub
Parent,PLogic:E:36,TigerCommHub
Parent,ZStage:M:37,TigerCommHub

# Initialize devices
Property,Core,Initialize,1

# Stage focus directions
FocusDirection,Z,0
FocusDirection,ImageGalvoMirrorRange,0
FocusDirection,MCL NanoDrive Z Stage,1
FocusDirection,ZStage:M:37,1

# Labels
Label,LED,0,Off
Label,LED,1,405nm
Label,LED,2,488nm
Label,LED,3,561nm
Label,LED,4,637nm
Label,LED,5,730nm
Label,OPM-mode,0,0-Standard
Label,OPM-mode,1,1-Projection
Label,OPM-mode,2,2-Stage
Label,AO-mode,0,0-System-correction
Label,AO-mode,1,1-Before-each-XYZ
Label,AO-mode,2,2-Before-every-acq
Label,AO-mode,3,3-Optimize-now
Label,Fluidics-mode,0,0-None
Label,Fluidics-mode,1,1-Thin-16bit
Label,Fluidics-mode,2,2-Thin-22bit
Label,Fluidics-mode,3,3-Thick-16bit
Label,Fluidics-mode,4,4-Thick-22bit
Label,O2O3focus-mode,0,0-Initial-only
Label,O2O3focus-mode,1,1-Before-each-XYZ
Label,O2O3focus-mode,2,2-Before-each-time
Label,O2O3focus-mode,3,3-After-30mins
Label,ImageGalvoMirrorStep,0,0.4-um
Label,ImageGalvoMirrorStep,1,0.8-um
Label,ImageGalvoMirrorStep,2,1.6-um

# Group configurations
# Groug: AO-mode
ConfigGroup,AO-Mode,Use system correction,AO-mode,Label,0-System-correction
ConfigGroup,AO-Mode,Before each XYZ position,AO-mode,Label,1-First-run
ConfigGroup,AO-Mode,Before every acq,AO-mode,Label,2-Before-every-acq
ConfigGroup,AO-Mode,Optimize now,AO-mode,Label,3-Optimize-now
# Group: AO-mode
ConfigGroup,Channel,405nm,LED,Label,405nm
ConfigGroup,Channel,488nm,LED,Label,488nm
ConfigGroup,Channel,561nm,LED,Label,561nm
ConfigGroup,Channel,635nm,LED,Label,635nm
ConfigGroup,Channel,730nm,LED,Label,730nm
ConfigGroup,Channel,Off,LED,Label,Off
ConfigGroup,Fluidics-mode,None,Fluidics-mode,Label,0-None
ConfigGroup,Fluidics-mode,Thin-16bit,Fluidics-mode,Label,1-Thin-16bit
ConfigGroup,Fluidics-mode,Thin-22bit,Fluidics-mode,Label,2-Thin-22bit
ConfigGroup,Fluidics-mode,Thick-16bit,Fluidics-mode,Label,3-Thick-16bit
ConfigGroup,Fluidics-mode,Thick-22bit,Fluidics-mode,Label,4-Thick-22bit
ConfigGroup,ImageGalvoRange,NewPreset,ImageGalvoMirrorRange,Position,100.0000
ConfigGroup,O2O3focus-mode,Once at start,O2O3focus-mode,Label,0-Initial-only
ConfigGroup,O2O3focus-mode,Before every XYZ position,O2O3focus-mode,Label,1-Before-each-XYZ
ConfigGroup,O2O3focus-mode,Before every timepoint,O2O3focus-mode,Label,2-Before-each-time
ConfigGroup,O2O3focus-mode,After 30mins,O2O3focus-mode,Label,3-After-30mins
ConfigGroup,ImageGalvoStep,0.4-micron,ImageGalvoMirrorStep,Label,0.4-um
ConfigGroup,ImageGalvoStep,0.8-micron,ImageGalvoMirrorStep,Label,0.8-um
ConfigGroup,ImageGalvoStep,1.6-micron,ImageGalvoMirrorStep,Label,1.6-um
ConfigGroup,OPM-Mode,Standard,OPM-mode,Label,0-Standard
ConfigGroup,OPM-Mode,Projection,OPM-mode,Label,1-Projection
ConfigGroup,OPM-Mode,Stage,OPM-mode,Label,2-Stage

# Configure Startup
ConfigGroup,System,Startup,Camera,BitDepth,16
ConfigGroup,System,Startup,Camera,ScanMode,1
ConfigGroup,System,Startup,Camera,Binning,1
ConfigGroup,System,Startup,LED Shutter,State Device,LED
ConfigGroup,System,Startup,OPM-mode,Label,0-Standard
ConfigGroup,System,Startup,AO-mode,Label,0-System-correction
ConfigGroup,System,Startup,Fluidics-mode,Label,0-None
ConfigGroup,System,Startup,O2O3focus-mode,Label,0-Initial-only
ConfigGroup,System,Startup,ImageGalvoMirrorStep,Label,0.4-um
ConfigGroup,System,Startup,ImageGalvoMirrorRange,Position,100.0000
# Set CoherentLaserSources to trigger on digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 488-150C - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 405-100C - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 637-140C - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 730-30C - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser OBIS LS 561-150 - Modulation/Trigger,External/Digital
# Set CoherentLaserSources power to 0
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 405-100C - PowerSetpoint (%),0.0000
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 488-150C - PowerSetpoint (%),0.0000
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 637-140C - PowerSetpoint (%),0.0000
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 730-30C - PowerSetpoint (%),0.0000
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser OBIS LS 561-150 - PowerSetpoint (%),0.0000
# Set CoherentLaserSources on
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 405-100C - State,On
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 488-150C - State,On
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 637-140C - State,On
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 730-30C - State,On
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser OBIS LS 561-150 - State,On
# Set HamamatsuHamCamera to output a trigger on exposure
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER KIND[2],EXPOSURE
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER POLARITY[0],POSITIVE
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER SOURCE[1],READOUT END
ConfigGroup,System,Startup,OrcaFusionBT,OUTPUT TRIGGER SOURCE[2],READOUT END
# Set HamamatsuCamera ScanMode3
ConfigGroup,System,Startup,OrcaFusionBT,ScanMode,3
# Set HamamatsuCamera trigger to normal
ConfigGroup,System,Startup,OrcaFusionBT,Trigger,NORMAL
# Set HamamatsuCameracamera to internal trigger
ConfigGroup,System,Startup,OrcaFusionBT,TRIGGER SOURCE,INTERNAL

# Roles
# Property,Core,Focus,Z
Property,Core,Camera,OrcaFusionBT
# Property,Core,Shutter,Coherent-Scientific Remote
Property,Core,Focus,ZStage:M:37
Property,Core,AutoShutter,1

# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Core,Camera,OrcaFusionBT
PixelSize_um,Res0,0.115
PixelSizeAffine,Res0,1.0,0.0,0.0,0.0,1.0,0.0